CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140124151645
GitHash:0c7fb94
ModuleCount:30
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
    Select the rule criteria:and (file does contain "GOL")
    Name to assign these images:GOL
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "NUC")
    Name to assign these images:NUC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "KIF")
    Name to assign these images:KIF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RNA")
    Name to assign these images:RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:GOL
    Name the output image:CropGOL
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:35,-35
    Top and bottom rectangle positions:35,-35
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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
    Select the input image:KIF
    Name the output image:CropKIF
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropGOL
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
Crop:[module_num:7|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
    Select the input image:NUC
    Name the output image:CropNUC
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropGOL
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
Crop:[module_num:8|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
    Select the input image:RNA
    Name the output image:CropRNA
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropGOL
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:CropNUC
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):85,300
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:CropGOL
    Name the primary objects to be identified:Golgi
    Typical diameter of objects, in pixel units (Min,Max):2,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:No
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:2.25
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:CropRNA
    Name the primary objects to be identified:sirna
    Typical diameter of objects, in pixel units (Min,Max):2,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0.014,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
RescaleIntensity:[module_num:12|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
    Select the input image:CropGOL
    Name the output image:RescaledGOL
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:13|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
    Select the input image:CropKIF
    Name the output image:RescaledKIF
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:14|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ResGOLKIF
    Image or measurement?:Image
    Select the first image:RescaledGOL
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:RescaledKIF
    Multiply the second image by:1.0
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
IdentifySecondaryObjects:[module_num:15|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:ResGOLKIF
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.85
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MaskObjects:[module_num:16|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
    Select objects to be masked:Golgi
    Name the masked objects:MaskedGolgi
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

IdentifyTertiaryObjects:[module_num:17|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:MaskedGolgi
    Name the tertiary objects to be identified:AntiGolgi
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:No

IdentifyTertiaryObjects:[module_num:18|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:AntiGolgi
    Name the tertiary objects to be identified:CellGolgi
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:No

MaskObjects:[module_num:19|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
    Select objects to be masked:sirna
    Name the masked objects:Maskedsirna
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:20|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
    Hidden:1
    Select an image to measure:CropKIF
    Select objects to measure:Cells

MeasureObjectNeighbors:[module_num:21|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensity:[module_num:22|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
    Hidden:1
    Select an image to measure:CropRNA
    Select objects to measure:Cells

MeasureObjectIntensity:[module_num:23|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
    Hidden:1
    Select an image to measure:CropGOL
    Select objects to measure:CellGolgi
    Select objects to measure:MaskedGolgi

MeasureObjectSizeShape:[module_num:24|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:CellGolgi
    Select objects to measure:MaskedGolgi
    Calculate the Zernike features?:No

RelateObjects:[module_num:25|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
    Select the input child objects:MaskedGolgi
    Select the input parent objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:26|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
    Select the input child objects:Maskedsirna
    Select the input parent objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
SaveImages:[module_num:27|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
    Select the type of image to save:Objects
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    Select the objects to save:Cells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:KIF
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    Append a suffix to the image file name?:No
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    Saved file format:mat
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Objects
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    Select the objects to save:MaskedGolgi
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    Select method for constructing file names:From image filename
    Select image name for file prefix:RNA
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    Append a suffix to the image file name?:No
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    Saved file format:mat
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:29|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
    Select the type of image to save:Objects
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    Select the objects to save:CellGolgi
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    Select method for constructing file names:From image filename
    Select image name for file prefix:GOL
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    Append a suffix to the image file name?:No
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    Saved file format:mat
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:CropGOL
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    Select method for constructing file names:From image filename
    Select image name for file prefix:NUC
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    Append a suffix to the image file name?:No
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    Saved file format:mat
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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